PsychoPy2experiment version="3.0.6"
Settings
  Experiment info = {'group': 'A', 'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = use prefs
  Window size (pixels) = [1280, 1024]
  expName = SAM
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Routines
  Routine arousal
    TextComponent text_5
      letterHeight = 0.2
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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    ImageComponent image_2
      image [set every repeat] = $images
      pos = (0, 0.4)
      size = (1, 1)
      startVal [time (s)] = 0.0
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    ImageComponent Arousalimage
      image = sam arousal.png
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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    SliderComponent slider_arousal
      forceEndRoutine = False
      granularity = 1
      pos = (0, -0.6)
      size = (0.81, 0.05)
      startVal [time (s)] = 0.0
      styles = ('rating',)
      ticks = (1, 25, 50, 75, 100)
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    TextComponent text_2
      letterHeight = 0.1
      pos = (-0.025, -0.3)
      startVal [time (s)] = 0.0
      text = Excited                                                    Calm
      wrapWidth = 2.5
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_4
      letterHeight = 0.06
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press {Space} to continue
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  Routine Valence
    TextComponent text_6
      letterHeight = 0.2
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $words
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    ImageComponent image_1
      image [set every repeat] = $images
      pos = (0, 0.4)
      size = (1,1)
      startVal [time (s)] = 0.0
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    ImageComponent ValenceImg
      image = sam image.png
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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    SliderComponent slider_valence
      forceEndRoutine = False
      granularity = 1
      pos = (0, -0.6)
      size = (0.81, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = ('rating',)
      ticks = (1, 25, 50, 75, 100)
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    TextComponent text
      letterHeight = 0.1
      pos = (0.015, -0.3)
      startVal [time (s)] = 0.0
      text = Positive                                                    Negative
      wrapWidth = 2
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_3
      letterHeight = 0.06
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press {Space} to continue
      wrapWidth = 2
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Flow
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = CueRatings.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('words', 'bunny'), ('images', 'Pictures/blank.jpg')]),
      OrderedDict([('words', 'afraid'), ('images', 'Pictures/blank.jpg')]),
      OrderedDict([('words', 'startled'), ('images', 'Pictures/blank.jpg')]),
      OrderedDict([('words', 'statue'), ('images', 'Pictures/blank.jpg')]),
      OrderedDict([('words', 'birthday'), ('images', 'Pictures/blank.jpg')]),
      OrderedDict([('words', 'coward'), ('images', 'Pictures/blank.jpg')]),
      OrderedDict([('words', 'cozy'), ('images', 'Pictures/blank.jpg')]),
      OrderedDict([('words', 'table'), ('images', 'Pictures/blank.jpg')]),
      OrderedDict([('words', 'divorce'), ('images', 'Pictures/blank.jpg')]),
      OrderedDict([('words', 'python'), ('images', 'Pictures/blank.jpg')]),
      OrderedDict([('words', 'dollar'), ('images', 'Pictures/blank.jpg')]),
      OrderedDict([('words', 'impair'), ('images', 'Pictures/blank.jpg')]),
      OrderedDict([('words', None), ('images', 'Pictures/1040.jpg')]),
      OrderedDict([('words', None), ('images', 'Pictures/1050.jpg')]),
      OrderedDict([('words', None), ('images', 'Pictures/1051.jpg')]),
      OrderedDict([('words', None), ('images', 'Pictures/1052.jpg')]),
      OrderedDict([('words', None), ('images', 'Pictures/1070.jpg')]),
      OrderedDict([('words', None), ('images', 'Pictures/1080.jpg')])]
    Routine Valence
    Routine arousal
  LoopTerminator trials_3
